CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Drop
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Drop
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigRed
    Relative weight of the red channel:2
    Relative weight of the green channel:0
    Relative weight of the blue channel:1
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigRed
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):150,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:400
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    Thresholding method:Otsu

ColorToGray:[module_num:7|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
    Select the input image:Drop
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGreen2
    Relative weight of the red channel:0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:0
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:OrigGreen2
    Select objects to measure:cell

ColorToGray:[module_num:9|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
    Select the input image:Drop
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigBlue
    Relative weight of the red channel:0
    Relative weight of the green channel:0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):150,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:400
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    Thresholding method:Otsu

RelateObjects:[module_num:11|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
    Parent objects:cell
    Child objects:nucleus
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateCellNucleus
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:RelateCellNucleus
    Calculate the Zernike features?:No

ColorToGray:[module_num:13|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
    Select the input image:Drop
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGreen
    Relative weight of the red channel:0
    Relative weight of the green channel:1
    Relative weight of the blue channel:0
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
MaskImage:[module_num:14|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:OrigGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:15|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:h2ax
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:3.0
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
RelateObjects:[module_num:16|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:cell
    Child objects:h2ax
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjectsG
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
MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:MaskedGreen
    Select objects to measure:RelateObjectsG

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:RelateObjectsG
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\deepphase
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:h2ax|Parent_cell,RelateCellNucleus|Number_Object_Number,RelateCellNucleus|Parent_nucleus,RelateCellNucleus|AreaShape_Area,cell|Children_h2ax_Count,cell|Children_nucleus_Count,nucleus|Parent_cell,nucleus|Number_Object_Number,RelateObjectsG|Intensity_MeanIntensity_MaskedGreen,RelateObjectsG|Intensity_IntegratedIntensity_MaskedGreen,RelateObjectsG|Parent_h2ax,RelateObjectsG|AreaShape_FormFactor,RelateObjectsG|AreaShape_Solidity,RelateObjectsG|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP4
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RelateObjectsG
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:nucleus
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RelateCellNucleus
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
